PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'eye_lr': '1'}
  Full-screen window = True
  Monitor = tiffany_laptop
  Screen = 1
  Units = cm
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = map
  logging level = debug
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Routines
  Routine Calibration
    PolygonComponent alignment_rectangle
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (26, 16)
      startVal [time (s)] = 0
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    PolygonComponent fixate_vert
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent confirm_prompt
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = Press Space to confirm calibration.
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    KeyboardComponent key_resp
      allowedKeys = 'space','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    PolygonComponent fixate_vert_2
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz_2
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']), 0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'w','s','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line
      fillColor = $[1,1,1]
      pos [set every repeat] = (-2*int(expInfo['eye_lr']), bottom_y)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.5
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    PolygonComponent middle_line
      fillColor = $[1,1,1]
      pos [set every repeat] = (-2*int(expInfo['eye_lr']), middle_y)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.5
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    PolygonComponent top_line
      fillColor = $[1,1,1]
      pos [set every repeat] = (-2*int(expInfo['eye_lr']), top_y)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.5
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    PolygonComponent blind_spot
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 50
      opacity = 0.5
      pos [set every repeat] = (int(expInfo['eye_lr'])*blind_x, blind_y)
      shape = regular polygon...
      size [set every repeat] = (blind_w, blind_h)
      startVal [time (s)] = 0.0
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  Routine Done
    TextComponent text
      letterHeight = 2
      startVal [time (s)] = 0.0
      text = Hurray you’re done!
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Flow
  Routine Calibration
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/line_locs.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('bottom_y', -3.9746259468844833), ('middle_y', 0.02537405311551674), ('top_y', 4.3253740531155165), ('blind_x', -2), ('blind_y', -2), ('blind_w', 2), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -4.025165208070439), ('middle_y', -0.02516520807043915), ('top_y', 3.874834791929561), ('blind_x', -2), ('blind_y', -2), ('blind_w', 2), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -3.9845384942218067), ('middle_y', 0.015461505778192719), ('top_y', 3.7154615057781935), ('blind_x', -2), ('blind_y', -2), ('blind_w', 2), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -4.022006114709565), ('middle_y', -0.022006114709565), ('top_y', 3.977993885290435), ('blind_x', -2), ('blind_y', -2), ('blind_w', 2), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -4.025134568630064), ('middle_y', -0.025134568630065614), ('top_y', 4.0748654313699335), ('blind_x', -2), ('blind_y', -2), ('blind_w', 2), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -3.97500761123919), ('middle_y', 0.02499238876080989), ('top_y', 4.2249923887608105), ('blind_x', -2), ('blind_y', -2), ('blind_w', 2), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -4.012756540975724), ('middle_y', -0.012756540975724508), ('top_y', 3.7872434590242747), ('blind_x', -2), ('blind_y', -2), ('blind_w', 2), ('blind_h', 2)]),
      OrderedDict([('bottom_y', -3.951559348287284), ('middle_y', 0.04844065171271601), ('top_y', 4.148440651712717), ('blind_x', -2), ('blind_y', -2), ('blind_w', 2), ('blind_h', 2)])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
    Routine Trial
  LoopTerminator trials
  Routine Done
