PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant': '', 'eye_lr': '1'}
  Full-screen window = False
  Monitor = james_laptop
  Screen = 1
  Units = cm
  Window size (pixels) = [1920, 1200]
  color = $[-1,-1,-1]
  expName = map
  logging level = debug
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Routines
  Routine Calibration
    PolygonComponent alignment_rectangle
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (26, 16)
      startVal [time (s)] = 0
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    PolygonComponent fixate_vert
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent confirm_prompt
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = Press Space to confirm calibration.
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    KeyboardComponent key_resp
      allowedKeys = 'space','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    PolygonComponent fixate_vert_2
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz_2
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']), 0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent test_spot
      fillColor = $[1,1,1]
      nVertices = 20
      pos [set every repeat] = (-2*int(expInfo['eye_lr']) + offset_x, offset_y)
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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Flow
  Routine Calibration
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/mapping.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('offset_x', 0), ('offset_y', 0)]),
      OrderedDict([('offset_x', 1), ('offset_y', 0)]),
      OrderedDict([('offset_x', 0), ('offset_y', 1)]),
      OrderedDict([('offset_x', -1), ('offset_y', 0)]),
      OrderedDict([('offset_x', 0), ('offset_y', -1)])]
    Routine Trial
  LoopTerminator trials
